PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = RDM
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Te damos la bienvenida.

        En seguida te presentaremos un questionario y una tarea de tiempos de reacción.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_ffmq
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    TextComponent text_intro_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora te presentaremos una encuesta relacionada a atencion.
        Ésta consta de 39 preguntas.

        Elije la alternativa que mejor refleje el grado en que estás de acuerdo con cada uno de los enunciados que se indican a continuación. Cuando estés listo/a presiona la barra espaciadora para continuar.
    KeyboardComponent key_resp__intro_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_ffmq
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    SliderComponent slider_ffmq
      forceEndRoutine = False
      granularity = 1
      labels = ["Nunca o muy raramente cierto", "Raramente cierto", "Algunas veces cierto", "A menudo cierto", "Muy a menudo o siempre cierto"] 
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{question_number}: {question_text}"
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    KeyboardComponent key_resp_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_ffmq.getRating() != None
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    TextComponent text_ffmq_next
      letterHeight = 0.02
      pos = (0.4, -0.45)
      startVal [condition] = slider_ffmq.getRating() != None
      text = [Presiona la barra espaciadora para continuar...]
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  Routine end_ffmq
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    TextComponent text_end_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hasta aquí llega el cuestionario. En seguida te pediremos que realices una tarea.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_end_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
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    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tarea RDM:

        Coloca tus dedos indices en las teclas F y J del teclado.
        Verás unos puntos moverse en la pantalla.
        Presiona F si se mueven a la IZQUIERDA.
        Presiona J si se mueven a la DERECHA.
        Las pruebas aumentaran de dificultad agregando puntos que se mueven aleatoriamente.
        A continuación haremos un entrenamiento

        [Presiona barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine fix
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    PolygonComponent cross_fix
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trial_dots
    RoutineSettingsComponent trial_dots
      stopVal [duration (s)] = 2
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    DotsComponent dots
      coherence [set every repeat] = dot_coherence
      dir [set every repeat] = dot_direction
      dotLife = 30
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .8
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed [set every repeat] = dot_speed
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_dots
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_trial_dots
      Code Type = Py
      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Setup LSL outlet
        info = StreamInfo("Psychopy", "Markers", 1, 0, "string", "PsychopyUUID0001")
        outlet = StreamOutlet(info)
        outlet.push_sample(["before_experiment"])
      Begin Experiment:
        outlet.push_sample(["begin_experiment"])
      Begin Routine:
        outlet.push_sample([f"Dots trial begin: {trials_dots.thisN+1}"])
        outlet.push_sample([f"dot_direction: {dot_direction}"])
        outlet.push_sample([f"dot_speed: {dot_speed}"])
        outlet.push_sample([f"dot_coherence: {dot_coherence}"])
  Routine block_end
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    TextComponent text_block_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""Este es el fin del bloque {blocks.thisN+1}. Puedes tomar una pausa.

        [Presiona la barra espaciadora para contiuar...]
        """
    KeyboardComponent key_resp_block_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Este es el fin de la prueba.

        ¡Gracias por participar!
  Routine train_coh_100
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    DotsComponent dots_train_coh_100
      coherence = 1.0
      dir = 0.0
      dotLife = 30
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.8
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.01
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_train_coh_100
      allowedKeys = "j"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_exp_1
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    TextComponent text_train_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Bien!

        Ahora una prueba de entrenamiento con ruido visual.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_train_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_coh_50
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    DotsComponent dots_train_coh_50
      coherence = .5
      dir = 180
      dotLife = 30
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.8
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.01
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_train_coh_50
      allowedKeys = "f"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_exp_2
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    TextComponent text_train_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Bien!

        Ahora con más ruido...

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_train_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_coh_06
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    DotsComponent dots_train_coh_06
      coherence = .064
      dir = 180
      dotLife = 30
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.8
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.01
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_train_coh_06
      allowedKeys = "f"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_trials
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    TextComponent text_pre_trials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Muy bien!

        Ahora empieza la tarea. Coloca tus dedos indices en las teclas F y J del teclado, e intenta responder lo más rápido que puedas.


        [Presiona barra espacadora para continuar...]
    KeyboardComponent key_resp_pre_trials
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine train_coh_100
  Routine train_coh_50
  Routine train_coh_06
  Routine Welcome
  Routine intro_ffmq
  LoopInitiator trials_ffmq loopType="TrialHandler"
    conditionsFile = lists/ffmq.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('question_number', 1), ('question_text', 'Cuando camino noto deliberadamente las sensaciones de mi cuerpo al moverse.')]),
      OrderedDict([('question_number', 2), ('question_text', 'Se me da bien encontrar las palabras para describir mis sentimientos.')]),
      OrderedDict([('question_number', 3), ('question_text', 'Me critico a mi mismo/a por tener emociones irracionales o inapropiadas.')]),
      OrderedDict([('question_number', 4), ('question_text', 'Percibo mis sentimientos y emociones sin tener que reaccionar a ellos.')]),
      OrderedDict([('question_number', 5), ('question_text', 'Cuando hago algo mi mente divaga y me distraigo fácilmente.')]),
      OrderedDict([('question_number', 6), ('question_text', 'Cuando me ducho o me baño estoy atento a las sensaciones del agua en mi cuerpo.')]),
      OrderedDict([('question_number', 7), ('question_text', 'Con facilidad puedo poner en palabras mis creencias sentimientos y expectativas.')]),
      OrderedDict([('question_number', 8), ('question_text', 'No presto atención a lo que hago porque sueño despierto porque me preocupo o porque me distraigo.')]),
      OrderedDict([('question_number', 9), ('question_text', 'Observo mis sentimientos sin perderme en ellos.')]),
      OrderedDict([('question_number', 10), ('question_text', 'Me digo a mi mismo/a que no debería sentir lo que siento.')]),
      OrderedDict([('question_number', 11), ('question_text', 'Noto cómo los alimentos y las bebidas afectan a mis pensamientos sensaciones corporales y emociones.')])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
    Routine trial_ffmq
  LoopTerminator trials_ffmq
  Routine end_ffmq
  Routine intro
  Routine train_coh_100
  Routine train_exp_1
  Routine train_coh_50
  Routine train_exp_2
  Routine train_coh_06
  Routine pre_trials
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials_dots loopType="TrialHandler"
      conditionsFile = lists/dots.csv
      loopType = fullRandom
      nReps = 20
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      conditions:
        [OrderedDict([('n_dots', 100), ('dot_direction', 0), ('dot_speed', 0.01), ('dot_coherence', 0.0), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 180), ('dot_speed', 0.01), ('dot_coherence', 0.0), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 0), ('dot_speed', 0.01), ('dot_coherence', 0.032), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 180), ('dot_speed', 0.01), ('dot_coherence', 0.032), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 0), ('dot_speed', 0.01), ('dot_coherence', 0.064), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 180), ('dot_speed', 0.01), ('dot_coherence', 0.064), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 0), ('dot_speed', 0.01), ('dot_coherence', 0.128), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 180), ('dot_speed', 0.01), ('dot_coherence', 0.128), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 0), ('dot_speed', 0.01), ('dot_coherence', 0.256), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 180), ('dot_speed', 0.01), ('dot_coherence', 0.256), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 0), ('dot_speed', 0.01), ('dot_coherence', 0.512), ('dot_lifetime', 10)]),
        OrderedDict([('n_dots', 100), ('dot_direction', 180), ('dot_speed', 0.01), ('dot_coherence', 0.512), ('dot_lifetime', 10)])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
      Routine fix
      Routine trial_dots
    LoopTerminator trials_dots
    Routine block_end
  LoopTerminator blocks
  Routine end
